CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<FolderInputData>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "dapi.tif")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "YFP.tif")
    Name to assign these images:Protein
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Protein
    Number of pixels by which to expand the primary objects:10
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:8|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
    Select the input image:Protein
    Name the output image:RescaledProtein
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:Nuc
    Name the output image:RescaledNuc
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledProtein
    Name the output image:ProteinOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cytoplasm

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:Protein
    Select objects to measure:Cytoplasm

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Intensity_MeanIntensity_Protein
    Select the image on which to display the measurements:ProteinOverlay
    Text color:red
    Name the output image that has the measurements displayed:ProteinDisplay
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

FilterObjects:[module_num:13|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
    Name the output objects:TransfectedCells
    Select the object to filter:Cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:Intensity_MeanIntensity_Protein
    Filter using a minimum measurement value?:Yes
    Minimum value:0.503
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:Nuclei
    Name the relabeled objects:TransfectedNuclei
    Retain outlines of relabeled objects?:Yes
    Name the outline image:TransfectedNucleiOutlines

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledNuc
    Name the output image:NucleusSegmentation
    Outline display mode:Color
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    Width of outlines:2
    Select outlines to display:NucleiOutlines
    Select outline color:blue
    Load outlines from an image or objects?:Image
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledProtein
    Name the output image:TransfectionMeasurement
    Outline display mode:Color
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    Width of outlines:2
    Select outlines to display:NucleiOutlines
    Select outline color:blue
    Load outlines from an image or objects?:Image
    Select objects to display:Cells
    Select outlines to display:TransfectedNucleiOutlines
    Select outline color:red
    Load outlines from an image or objects?:Image
    Select objects to display:TransfectedCells

Tile:[module_num:16|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
    Select an input image:NucleusSegmentation
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:TransfectionMeasurement

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuc
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--cp_result
    Saved file format:jpeg
    Output file location:Same folder as image|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<FolderInputData>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Count_TransfectedNuclei,Image|Count_Nuclei,Image|FileName_Nuc
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
