CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Cyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Cyto
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0
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