CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Treatment>.*)--(?P<Repl>.*)--(?P<Set>.*)--.*
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<DataFolder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (file does contain "Nucleus.tif")
    Name to assign these images:Nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Protein1.tif")
    Name to assign these images:P1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Protein2.tif")
    Name to assign these images:P2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuc
    Number of pixels by which to expand the primary objects:200
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
Morph:[module_num:7|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notes:['Scale: Vesicle diameter']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
    Select the input image:P1
    Name the output image:P1TH
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:8|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
    Select the input image:P2
    Name the output image:P2TH
    Select the operation to perform:tophat
    Number of times to repeat operation:Once
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    Scale:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:9|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notes:['threshold correction factor']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
    Select the input image:P1TH
    Name the primary objects to be identified:P1
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:5
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:10|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notes:['threshold correction factor']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
    Select the input image:P2TH
    Name the primary objects to be identified:P2
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:5
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:P1
    Name the output image:P1BW
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:P2
    Name the output image:P2BW
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:13|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ColocBW
    Image or measurement?:Image
    Select the first image:P1BW
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:P2BW
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:ColocBW
    Name the primary objects to be identified:Coloc
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:P1
    Name the output image:P1outlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:#00FF80
    Load outlines from an image or objects?:Objects
    Select objects to display:P1

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:P2
    Name the output image:P2outlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:P2

GrayToColor:[module_num:17|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
    Select a color scheme:RGB
    Select the image to be colored red:P2
    Select the image to be colored green:P1
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:ColocOutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Coloc

Tile:[module_num:19|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
    Select an input image:P1outlines
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:3
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:P2outlines
    Select an additional image to tile:ColocOutlines

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuc
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--CPout
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
RelateObjects:[module_num:21|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
    Select the input child objects:P1
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:22|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
    Select the input child objects:P2
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:23|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
    Select the input child objects:Coloc
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectIntensity:[module_num:24|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
    Hidden:3
    Select an image to measure:P1BW
    Select an image to measure:P2BW
    Select an image to measure:ColocBW
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\\\\g<DataFolder>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements to export:Image|Metadata_Set,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Repl,Image|Metadata_FileLocation,Image|Metadata_Treatment,Image|Metadata_DataFolder,Cells|Intensity_IntegratedIntensity_P1BW,Cells|Intensity_IntegratedIntensity_ColocBW,Cells|Intensity_IntegratedIntensity_P2BW,Cells|Children_P2_Count,Cells|Children_Coloc_Count,Cells|Children_P1_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
